PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = gottingen_solstice
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine demographics
    RoutineSettingsComponent demographics
      disabled = True
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    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = formItems1.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen!

        Vielen Dank für Ihr Interesse an unserem kleinen Experiment.

        Drücken Sie die LEERTASTE um fortzufahren.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_1st
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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      text:
        Das Experiment ist jetzt abgeschlossen.

        Vielen Dank für Ihre Teilnahme!
  Routine task
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $target_stim
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'n', 'v'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if movie.status == FINISHED:
            movie.setAutoDraw(False)
  Routine answer_text
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    TextComponent after_exp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Geschafft!

        Das Experiment ist zu Ende. Jetzt kannst du dir die Auflösung zu allen Videos ansehen.

        Drücken Sie die LEERTASTE.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine answers
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = $target_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine instructions_2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ZIEL

        Mithilfe dieses kurzen Experiments möchten wir untersuchen, wie intuitiv verständlich einzelne Gebärden für Menschen mit keiner bis wenig Erfahrung mit Deutscher Gebärdensprache (DGS) sind.

        Drücken Sie die LEERTASTE um  fortzufahren.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FRAGEN UND KONTAKT

        Das Experiment wird im Rahmen der Nacht des Wissens an der Universität Göttingen durchgeführt Falls Sie Fragen haben sprechen Sie uns einfach an (Dr. Nina-Kristn Meister oder Dr. Patrick C. Trettenbrein).

        Drücken Sie die LEERTASTE, um zu beginnen.

        Viel Spaß!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_25
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FREIWILLIGKEIT UND DATENSCHUTZ

        Die Teilnahme am Experiment ist freiwillig und anonym. Sie können es jederzeit ohne Angabe von Gründen beenden. Informationen zum Datenschutz liegen ausgedruckt neben den Laptops auf den Tischen.

        Drücken Sie die LEERTASTE.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS_30
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    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        ABLAUF UND INHALT

        Anfangs werden einige demografische Daten von Ihnen abgefragt.

        Danach werden Ihnen DGS-Gebärden präsentiert. Es handelt sich dabei immer entweder um ein Nomen oder ein Verb. Sie entscheiden per Tastendruck, zu welcher Wortart die Gebärde, die Sie gerade gesehen haben, gehört.

        Drücken Sie “N”, wenn Sie denken, dass es sich um ein Nomen gehandelt hat. Nomen sind Wörter die Dinge, Menschen, Pflanzen, usw. bezeichnen.

        Drücken Sie “V”, wenn Sie denken, dass es sich um ein Verb gehandelt hat. Verben sind Wörter, die eine Tätgikeit, ein Geschehen, einen Vorgang oder einen Zustand bezeichnen.

        Drücken Sie die LEERTASTE um fortzufahren.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine task_answers
    RoutineSettingsComponent task_answers
      disabled = True
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = False
      movie = $target_answers
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent answer_labels
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $movie_3.duration
      text = $translation_answers
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  Routine answer_key
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    MovieComponent movie_4
      backend = ffpyplayer
      forceEndRoutine = False
      movie = $target_stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = $translation_stim
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  Routine answers_to_task
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MovieComponent movie_5
      backend = ffpyplayer
      forceEndRoutine = False
      movie = $target_answers
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = $translation_answers
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  Routine answer_trials
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    MovieComponent movie_6
      backend = ffpyplayer
      forceEndRoutine = False
      movie = NoK_targets_answers.xlsx
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
      Begin Experiment:
        #movie_6.movie = target_answers
      Begin Routine:
        #text_9.text = translation_answers
  PavloviaSurveyRoutine survey_3
    surveyType = id
  PavloviaSurveyRoutine survey_2
    surveyId = c9302774-973a-4cba-99b8-4cd4c5d34afe
    surveyType = id
  Routine solution
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    MovieComponent solution_movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $target_stim_solution
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent solution_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $translation_stim_solution
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  PavloviaSurveyRoutine survey
    surveyId = c9302774-973a-4cba-99b8-4cd4c5d34afe
    surveyType = id
Flow
  Routine instructions
  Routine instructions_2
  Routine INSTRUCTIONS_30
  PavloviaSurveyRoutine survey
  Routine instructions_25
  Routine instructions_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = NoK_targets.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target_stim': 'concrete_2_N_target.mp4', 'translation_stim': 'Fahrrad'},
      {'target_stim': 'concrete_3_N_target.mp4', 'translation_stim': 'Eis'},
      {'target_stim': 'concrete_4_N_target.mp4', 'translation_stim': 'Auto'},
      {'target_stim': 'concrete_7_N_target.mp4', 'translation_stim': 'Angel'},
      {'target_stim': 'concrete_9_N_target.mp4', 'translation_stim': 'Kamm'},
      {'target_stim': 'concrete_2_V_target.mp4', 'translation_stim': 'Fahrrad fahren'},
      {'target_stim': 'concrete_3_V_target.mp4', 'translation_stim': 'Eis essen'},
      {'target_stim': 'concrete_4_V_target.mp4', 'translation_stim': 'Auto fahren'},
      {'target_stim': 'concrete_9_V_target.mp4', 'translation_stim': 'angeln'},
      {'target_stim': 'abstract_2_N_target.mp4', 'translation_stim': 'Kritik'},
      {'target_stim': 'abstract_7_N_target.mp4', 'translation_stim': 'Arbeit'},
      {'target_stim': 'abstract_9_N_target.mp4', 'translation_stim': 'Besuch'},
      {'target_stim': 'abstract_5_N_target.mp4', 'translation_stim': 'Hilfe '},
      {'target_stim': 'abstract_8_N_target.mp4', 'translation_stim': 'Umzug'},
      {'target_stim': 'abstract_2_V_target.mp4', 'translation_stim': 'kritisieren'},
      {'target_stim': 'abstract_7_V_target.mp4', 'translation_stim': 'arbeiten'},
      {'target_stim': 'abstract_9_V_target.mp4', 'translation_stim': 'besuchen'},
      {'target_stim': 'abstract_5_V_target.mp4', 'translation_stim': 'helfen'},
      {'target_stim': 'abstract_8_V_target.mp4', 'translation_stim': 'umziehen'}]
    Routine task
  LoopTerminator trials
  Routine answer_text
  LoopInitiator trials_solution loopType="TrialHandler"
    conditionsFile = NoK_targets_solution.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'target_stim_solution': 'concrete_2_N_target.mp4', 'translation_stim_solution': 'Fahrrad'},
      {'target_stim_solution': 'concrete_3_N_target.mp4', 'translation_stim_solution': 'Eis'},
      {'target_stim_solution': 'concrete_4_N_target.mp4', 'translation_stim_solution': 'Auto'},
      {'target_stim_solution': 'concrete_7_N_target.mp4', 'translation_stim_solution': 'Kamm'},
      {'target_stim_solution': 'concrete_9_N_target.mp4', 'translation_stim_solution': 'Angel'},
      {'target_stim_solution': 'concrete_2_V_target.mp4', 'translation_stim_solution': 'Fahrrad fahren'},
      {'target_stim_solution': 'concrete_3_V_target.mp4', 'translation_stim_solution': 'Eis essen'},
      {'target_stim_solution': 'concrete_4_V_target.mp4', 'translation_stim_solution': 'Auto fahren'},
      {'target_stim_solution': 'concrete_9_V_target.mp4', 'translation_stim_solution': 'angeln'},
      {'target_stim_solution': 'abstract_2_N_target.mp4', 'translation_stim_solution': 'Kritik'},
      {'target_stim_solution': 'abstract_7_N_target.mp4', 'translation_stim_solution': 'Arbeit'},
      {'target_stim_solution': 'abstract_9_N_target.mp4', 'translation_stim_solution': 'Besuch'},
      {'target_stim_solution': 'abstract_5_N_target.mp4', 'translation_stim_solution': 'Hilfe '},
      {'target_stim_solution': 'abstract_8_N_target.mp4', 'translation_stim_solution': 'Umzug'},
      {'target_stim_solution': 'abstract_2_V_target.mp4', 'translation_stim_solution': 'kritisieren'},
      {'target_stim_solution': 'abstract_7_V_target.mp4', 'translation_stim_solution': 'arbeiten'}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
    Routine solution
  LoopTerminator trials_solution
  Routine end
